PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'Audio': "['Yes', 'No']", 'Debug': "['No', 'Yes']"}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['resources/aud/slide-01.m4a', 'resources/aud/slide-02.m4a', 'resources/aud/Tone audio.m4a', 'resources/imgs/slides/slide-01.png', 'resources/imgs/slides/slide-02.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  color = $[1,1,1]
  expName = S-CLAS
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Routines
  Routine intr1
    CodeComponent begin_code
      Code Type = Auto->JS
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      Begin Experiment:
        # Might want to remove audio toggle eventually
        #expInfo["Debug"] = "No"
        #expInfo["Audio"] = "Yes"

        expVersion = "2022.09.23"
        AUD_DIR = "resources/aud"
        IMGS_DIR = "resources/imgs"
        SLIDES_DIR = f"{IMGS_DIR}/slides"

        USE_AUDIO = expInfo["Audio"] == "Yes"
        SHOW_DEBUG = expInfo["Debug"] == "Yes"

        CLICK_BOX_OPACITY = 0.2 if SHOW_DEBUG else 0

        """
        Slides are 1920 × 1080 pixels.
        Positions and sizes of clickable areas are hard
        coded, so changing this will break _everything_!

        """
        SLIDE_H = 0.7
        SLIDE_W = SLIDE_H / 1080 * 1920
        SLIDE_SIZE = (SLIDE_W, SLIDE_H)

        # "Next" button at top-right
        NEXT_POS = (0.515, 0.290)
        NEXT_SIZE = (0.165, 0.075)
        NEXT = make_rect("next", NEXT_POS, NEXT_SIZE, CLICK_BOX_OPACITY)

        PLAY_POS = (-0.005, -0.109)
        PLAY_SIZE = (0.108, 0.108)
        PLAY =  make_circle("play", PLAY_POS, PLAY_SIZE, None, "white")

        # For covering "Next" button
        COVER_SIZE = (0.17, 0.08)
        COVER = make_rect("cover", NEXT_POS, COVER_SIZE, None, "white", 0, "white")


        # Global mouse
        MOUSE = core.Mouse(win=win)
        MOUSE_L = 0
        MOUSE_L_prev = 0

        # Global sound
        SOUND = None
      Begin Routine:
        slide = make_slide("slide-01")
        slide.autoDraw = True
        NEXT.autoDraw = True

        if USE_AUDIO:
            aud_file = f"{AUD_DIR}/slide-01.m4a"
            SOUND = make_sound("sound", aud_file)
            SOUND_DUR = SOUND.getDuration()
            SOUND_START = 0
            SOUND.play()
      Each Frame:
        # Clicking on "Next" is always enabled here
        MOUSE_L = MOUSE.getPressed()[0]
        if MOUSE_L_prev != MOUSE_L:
            MOUSE_L_prev = MOUSE_L
            if MOUSE_L and NEXT.contains(MOUSE):
                continueRoutine = False

        if t - SOUND_START - 1 >= SOUND_DUR:
            continueRoutine = False

        if SHOW_DEBUG:
            begin_text.text = f"""
        aud_file = {aud_file}
        t = {round(t, 3)}
        sound_completed = {t - SOUND_START >= SOUND_DUR}
        """
      End Routine:
        NEXT.autoDraw = False
        slide.autoDraw = False

        if USE_AUDIO:
            SOUND.stop()
    CodeComponent functions_g
      Code Type = Auto->JS
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      Before Experiment:
        def make_sound(name, filepath):
            return sound.Sound(
                win=win,
                value=filepath,
                secs=-1,
                stereo=True,
                hamming=True,
                name=name
            )

        def make_img(name, file_name, pos, size, opacity):
            return visual.ImageStim(
                win=win,
                name=name,
                image=file_name,
                pos=pos,
                size=size,
                opacity=opacity
            )

        def make_slide(name, pos=(0, 0), size=SLIDE_SIZE):
            return make_img(
                name,
                f"{SLIDES_DIR}/{name}.png",
                pos, size, 1
            )

        def make_rect(
            name, pos, size, opacity,
            lineColor="green",
            lineWidth=3,
            fillColor=None
        ):
            if fillColor is not None:
                fillColor = util.Color(fillColor)
            if lineColor is not None:
                lineColor = util.Color(lineColor)
            return visual.Rect(
                win=win,
                name=name,
                width=size[0],
                height=size[1],
                pos=pos,
                lineWidth=lineWidth,
                lineColor=lineColor,
                fillColor=fillColor,
                opacity=opacity
            )

        def make_boxes(names, xys, sizes, opacity=CLICK_BOX_OPACITY, lineColor="green"):
            cimgs = []
            for i in range(len(names)):
                cimgs.append(make_rect(names[i], xys[i], sizes[i], opacity, lineColor))
            return cimgs

        def make_circle(
            name, pos, size,
            fillColor="black",
            lineColor="black",
            lineWidth=3,
            opacity=1
        ):
            if lineColor is not None:
                lineColor = util.Color(lineColor)
            if fillColor is not None:
                fillColor = util.Color(fillColor)
            return visual.Polygon(
                win=win,
                name=name,
                edges=360,
                size=size,
                pos=pos,
                lineWidth=lineWidth,
                lineColor=lineColor,
                fillColor=fillColor,
                opacity=opacity
            )

        def make_radio0(name, pos):
            return make_circle(name, pos, (0.03, 0.03), None, "black")

        def make_radio1(name, pos):
            return make_circle(name, pos, (0.023, 0.023), "black", None, 0)

        def find_min_y(cimgs):
            min_y = 0.5
            for cimg in cimgs:
                y = cimg.pos[1] - (cimg.height / 2)
                if min_y > y:
                    min_y = y
            return min_y

        def make_radios(func, cimgs, res=[], offset=-0.05):
            min_y = find_min_y(cimgs)
            for cimg in cimgs:
                radio_y = min_y + offset
                res.append(func(cimg.name, (cimg.pos[0], radio_y)))
            return res
    TextComponent begin_text
      color = black
      letterHeight = 0.02
      pos = (0.6, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine intr2
    CodeComponent intr2_code
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData("expVersion", expVersion)

        response = None
        has_responded = False

        slide = make_slide("slide-02")
        slide.autoDraw = True

        PLAY.autoDraw = True
        NEXT.autoDraw = True
        COVER.autoDraw = True
        COVER.opacity = 1

        if USE_AUDIO:
            aud_file = f"{AUD_DIR}/slide-02.m4a"
            SOUND = make_sound("sound", aud_file)
            SOUND_DUR = SOUND.getDuration()
            SOUND_START = 0
            SLIDE_SOUND_START = 0
            SOUND.play()
      Each Frame:
        # Adding a block comment here will screw everything up! Bet you didn't know that!

        MOUSE_L = MOUSE.getPressed()[0]
        if MOUSE_L_prev != MOUSE_L:
            MOUSE_L_prev = MOUSE_L
            if MOUSE_L:
                if has_responded and NEXT.contains(MOUSE):
                    continueRoutine = False
                if PLAY.contains(MOUSE):
                    has_responded = True
                    COVER.opacity = 0
                    if t - SOUND_START < SOUND_DUR:
                        # Will only work if the sound has not ended yet
                        SOUND.stop()
                    aud_file = f"{AUD_DIR}/Tone audio.m4a"
                    SOUND = make_sound("sound", aud_file)
                    SOUND_DUR = SOUND.getDuration()
                    SOUND_START = t
                    SLIDE_SOUND_START = t
                    SOUND.play()


        if SHOW_DEBUG:
            intr2_text.text = f"""
        aud_file = {aud_file}
        slide_num = {slide.name}
        response = {response}
        has_responded = {has_responded}
        t = {round(t, 3)}
        """
      End Routine:
        if USE_AUDIO:
            SOUND.stop()


        slide.size = (0, 0)
        slide.autoDraw = False
        NEXT.autoDraw = False
        PLAY.autoDraw = False
        COVER.autoDraw = False

        thisExp.addData("response", response)

        # Record timestamp and total time
        thisExp.addData("end_timestamp", util.MonotonicClock.getDateStr())
        thisExp.addData("total_seconds", globalClock.getTime())
    TextComponent intr2_text
      color = black
      letterHeight = 0.02
      pos = (0.6, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  Routine intr1
  Routine intr2
